PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = bulwiaste
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Ziemniaki czy buraki?
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_5
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $menu
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  Routine fbck
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = Super!
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  Routine witaj
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Witaj w super badaniu. Wciśnij spację.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine zegnaj
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = To koniec super badania:(
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Flow
  Routine witaj
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = metoda.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('menu', 'smażone')]),
      OrderedDict([('menu', 'pieczone')]),
      OrderedDict([('menu', 'gotowane')]),
      OrderedDict([('menu', 'grillowane')])]
    Routine trial
    Routine fbck
  LoopTerminator trials
  Routine zegnaj
